'CR300 Series Datalogger

'For programming tips, copy this address to your browser
'search window:https://www.campbellsci.com/videos/datalogger-programming
'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template
'Date:
'Program author:

'Declare Constants
'Example:
'CONST PI = 3.141592654 or Const PI = 4*ATN(1)

'Declare Public Variables
'Example:
Public PTemp, Batt_volt, FTPResult
Public cellsignal As Long
Public cellquality As Float

Dim adress As String = "200.132.216.21" 'IP_ADDRES:PORT
Dim username As String = "tide_ssn5"
Dim password As String = "b16045b0"
Dim datalogger_filename As String =  "FTP_TEST"
Dim csv_filename As String = "/tide_snn5/ftp_test.csv"

Public loggerID As String * 20
StationName = PR1CR300

'Declare Private Variables
'Example:
'Dim Counter

'Define Data Tables.
DataTable (FTPTest,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,15,Sec,10)
	Minimum (1,Batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
	Sample(1, loggerID, String)
	Sample(1, cellquality,FP2)
	Sample(1, cellsignal, FP2)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (1,Sec,0,0)
		PanelTemp (PTemp,60)
		Battery (Batt_volt)
		loggerID=Status.StationName(1,1)
		cellsignal = Status.CellRSSI 'Received signal strength indication for 3g conection
    cellquality = Status.CellRSRQ 'Received signal QUALITY indication for 3g conection
		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable FTPTest
	NextScan
	
  SlowSequence
  Do
    Delay(1,10,sec)
    'cria o arquivo ftp_test.csv e append data a cada 5 min
    FTPResult = FTPClient(adress,username,password,datalogger_filename,csv_filename,9,0,5,min,-1008) 
    'FTPRescult =-1 se ok e =0 se falha e -2 se nao aconteceu
    'PutGetOption (Send or Receive a File) = 9 means: Append data to end of file, passive mode (creates a file if it does not already exist)
    'NumRecs/TimeIntoInterval (Time into Interval to Write the Number of Records = 0 means All new (unsent) data in the data table is sent.
    Loop
EndProg

